PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['sancho-test'], expName, expInfo['date'])
  Experiment info = {'sancho-test': '[True, False]'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1500,800]
  expName = sancho-test
  keyboardBackend = ioHub
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Routines
  Routine docount
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        p=0
      Begin Routine:
        p=p+1
        msg="This is participant number "+str(p)
  Routine setmap
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    CodeComponent set_mapping
      Code Type = Py
      Begin Routine:
        import random
        mytasks = ["control", "reward", "valence"]
        random.shuffle(mytasks)
        the_current_task = mytasks[0]
        this_task_msg = "Task is: " + the_current_task

        if the_current_task == "control":

            possible_labels=['air', 'earth', 'sky']
            random.shuffle(possible_labels)
            Label1_type = possible_labels[0]
            Label1_type_msg = "Label 1 is: " + Label1_type
            Label2_type = possible_labels[1]
            Label2_type_msg = "Label 2 is: " + Label2_type
            Label3_type = possible_labels[2]
            Label3_type_msg = "Label 3 is: " + Label3_type

            indices=[0,1,2]
            random.shuffle(indices)
            possible_file_names =  ['T.bmp', 'S.bmp', 'C.bmp']
            possible_shape_names = ['Triangle',     'Square',     'Circle']

            Shape1_shape_name = possible_shape_names[indices[0]]
            Shape1_file_name  = possible_file_names[indices[0]]
            Shape1_msg = "Shape 1 is: " + Shape1_shape_name
            Shape2_shape_name = possible_shape_names[indices[1]]
            Shape2_file_name  = possible_file_names[indices[1]]
            Shape2_msg = "Shape 2 is: " + Shape2_shape_name
            Shape3_shape_name = possible_shape_names[indices[2]]
            Shape3_file_name  = possible_file_names[indices[2]]
            Shape3_msg = "Shape 3 is: " + Shape3_shape_name

        elif the_current_task == "reward":
            # then
            possible_labels=['£100', '£50', '£0']
            random.shuffle(possible_labels)
            Label1_type = possible_labels[0]
            Label1_type_msg = "Label 1 is: " + Label1_type
            Label2_type = possible_labels[1]
            Label2_type_msg = "Label 2 is: " + Label2_type
            Label3_type = possible_labels[2]
            Label3_type_msg = "Label 3 is: " + Label3_type

            indices=[0,1,2]
            random.shuffle(indices)
            possible_file_names =  ['P.bmp', 'D.bmp', 'O.bmp']
            possible_shape_names = ['Pentagon',     'Diamond',     'Oval']

            Shape1_shape_name = possible_shape_names[indices[0]]
            Shape1_file_name  = possible_file_names[indices[0]]
            Shape1_msg = "Shape 1 is: " + Shape1_shape_name
            Shape2_shape_name = possible_shape_names[indices[1]]
            Shape2_file_name  = possible_file_names[indices[1]]
            Shape2_msg = "Shape 2 is: " + Shape2_shape_name
            Shape3_shape_name = possible_shape_names[indices[2]]
            Shape3_file_name  = possible_file_names[indices[2]]
            Shape3_msg = "Shape 3 is: " + Shape3_shape_name

        elif the_current_task == "valence":
            # then
            possible_labels=['happy', 'neutral', 'sad']
            random.shuffle(possible_labels)
            Label1_type = possible_labels[0]
            Label1_type_msg = "Label 1 is: " + Label1_type
            Label2_type = possible_labels[1]
            Label2_type_msg = "Label 2 is: " + Label2_type
            Label3_type = possible_labels[2]
            Label3_type_msg = "Label 3 is: " + Label3_type

            indices=[0,1,2]
            random.shuffle(indices)
            possible_file_names =  ['H.bmp', 'R.bmp', 'X.bmp']
            possible_shape_names = ['Hexagon',     'Rectangle',     'Star']

            Shape1_shape_name = possible_shape_names[indices[0]]
            Shape1_file_name  = possible_file_names[indices[0]]
            Shape1_msg = "Shape 1 is: " + Shape1_shape_name
            Shape2_shape_name = possible_shape_names[indices[1]]
            Shape2_file_name  = possible_file_names[indices[1]]
            Shape2_msg = "Shape 2 is: " + Shape2_shape_name
            Shape3_shape_name = possible_shape_names[indices[2]]
            Shape3_file_name  = possible_file_names[indices[2]]
            Shape3_msg = "Shape 3 is: " + Shape3_shape_name

        thisExp.addData('subjectNumber', p)

        thisExp.addData('task', the_current_task)

        thisExp.addData('Label1_type', Label1_type)
        thisExp.addData('Shape1_shape_name', Shape1_shape_name)
        thisExp.addData('Shape1_file_name', Shape1_file_name)

        thisExp.addData('Label2_type', Label2_type)
        thisExp.addData('Shape2_shape_name', Shape2_shape_name)
        thisExp.addData('Shape2_file_name', Shape2_file_name)

        thisExp.addData('Label3_type', Label3_type)
        thisExp.addData('Shape3_shape_name', Shape3_shape_name)
        thisExp.addData('Shape3_file_name', Shape3_file_name)
  Routine inter_trial_interval
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine one_trial
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    TextComponent label_text
      letterHeight = 0.25
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Label1_type
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    ImageComponent shape_image
      image [set every repeat] = $Shape1_file_name
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent trial_dismiss
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine match_or_mismatch_this_trial
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    CodeComponent code_2
      Code Type = Py
  Routine testShow
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    TextComponent which_participant
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent put_task
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_task_msg
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    TextComponent mylabel1
      letterHeight = 0.05
      pos = (-.5, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Label1_type_msg
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    TextComponent myshape1
      letterHeight = 0.05
      pos = (.3,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Shape1_msg
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    TextComponent mylabel2
      letterHeight = 0.05
      pos = (-.5, -.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Label2_type_msg
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    TextComponent myshape2
      letterHeight = 0.05
      pos = (.3, -.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Shape2_msg
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    TextComponent mylabel3
      letterHeight = 0.05
      pos = (-.5, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Label3_type_msg
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    TextComponent myshape3
      letterHeight = 0.05
      pos = (.3, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Shape3_msg
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space
      letterHeight = 0.025
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press 'space' for the next participant, or 'escape' to stop the test
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Flow
  Routine docount
  Routine setmap
  Routine testShow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine inter_trial_interval
    Routine match_or_mismatch_this_trial
    Routine one_trial
  LoopTerminator trials
